PsychoPy2experiment version="1.85.3"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u'', u'counterbalance': u''}
  Units = use prefs
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  expName = simon_task
  Screen = 1
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Routines
  Routine simon_setup
    CodeComponent simon_config
      Begin Routine:
        if expInfo['counterbalance'] == '0':
            bindings = {'X': 'm', 'O': 'z'}
            if thisTrial['condition'] == 'incongruent':
                if thisTrial['stim'] == 'X':
                    left_stim_text = thisTrial['stim']
                    right_stim_text = ''
                    ans = 'm'
                elif thisTrial['stim'] == 'O':
                    left_stim_text = ''
                    right_stim_text = thisTrial['stim']
                    ans = 'z'
            elif thisTrial['condition'] == 'congruent':
                if thisTrial['stim'] == 'X':
                    left_stim_text = ''
                    right_stim_text = thisTrial['stim']
                    ans = 'm'
                elif thisTrial['stim'] == 'O':
                    left_stim_text = thisTrial['stim']
                    right_stim_text = ''
                    ans='z'
        elif expInfo['counterbalance'] == '1':
            bindings = {'O': 'm', 'X': 'z'}
            if thisTrial['condition'] == 'incongruent':
                if thisTrial['stim'] == 'X':
                    left_stim_text = ''
                    right_stim_text = thisTrial['stim']
                    ans = 'z'
                elif thisTrial['stim'] == 'O':
                    left_stim_text = thisTrial['stim']
                    right_stim_text = ''
                    ans = 'm'
            elif thisTrial['condition'] == 'congruent':
                if thisTrial['stim'] == 'X':
                    left_stim_text = thisTrial['stim']
                    right_stim_text = ''
                    ans = 'z'
                elif thisTrial['stim'] == 'O':
                    left_stim_text = ''
                    right_stim_text = thisTrial['stim']
                    ans = 'm'
  Routine simon_trial
    TextComponent fixation_cross
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent left_stim
      text [set every repeat] = $left_stim_text
      stopVal [duration (s)] = 1.0
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent right_stim
      text [set every repeat] = $right_stim_text
      stopVal [duration (s)] = 1.0
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent ITI
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 1.0
      letterHeight = 0.1
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    KeyboardComponent resp
      correctAns = $ans
      storeCorrect = True
      stopVal [duration (s)] = 1.8
      forceEndRoutine = False
      allowedKeys = 'z','m'
      startVal [time (s)] = 0.2
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = simon_task_order.csv
    loopType = sequential
    nReps = 2
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    conditions:
      [{u'stim': u'X', u'condition': u'incongruent'},
      {u'stim': u'X', u'condition': u'congruent'},
      {u'stim': u'O', u'condition': u'incongruent'},
      {u'stim': u'O', u'condition': u'congruent'}]
    Routine simon_setup
    Routine simon_trial
  LoopTerminator trials
